CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (file doesnot contain "thumb") (file doesnot contain "DS_Store")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<CellType>\w*)-(?P<Mag>\w*)-(?P<Tmt>\w*)-(?P<Conc>\w*)-(?P<Live>\w{4})_(?P<Well>\w*)_(?P<Site>\w*)_(?P<Channel>\w{2})
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:/TimePoint_*(?P<TimePoint>\w*)
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'Mito': u'Well', 'DNA': u'Well'}, {u'Mito': u'Site', 'DNA': u'Site'}, {u'Mito': u'TimePoint', u'DNA': u'TimePoint'}]
    Image set matching method:Metadata
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "w1")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "w2")
    Name to assign these images:Mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Nucleus
    Typical diameter of objects, in pixel units (Min,Max):45,90
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nucleus
    Name the objects to be identified:CellBoundary
    Select the method to identify the secondary objects:Propagation
    Select the input image:Mito
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    Regularization factor:0.025
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.25,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifySecondaryObjects:[module_num:7|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enabled:False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
    Select the input objects:Nucleus
    Name the objects to be identified:Mitochondria
    Select the method to identify the secondary objects:Propagation
    Select the input image:Mito
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifyTertiaryObjects:[module_num:8|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
    Select the larger identified objects:CellBoundary
    Select the smaller identified objects:Nucleus
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureGranularity:[module_num:9|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enabled:False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
    Image count:2
    Object count:1
    Select an image to measure:DNA
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:18
    Select objects to measure:Nucleus
    Object count:1
    Select an image to measure:Mito
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:28
    Select objects to measure:Cytoplasm

MeasureImageAreaOccupied:[module_num:10|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
    Hidden:3
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Nucleus
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:CellBoundary
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Cytoplasm
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
MeasureObjectSizeShape:[module_num:11|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
    Select objects to measure:Nucleus
    Select objects to measure:Cytoplasm
    Calculate the Zernike features?:No

MeasureObjectIntensity:[module_num:12|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
    Hidden:1
    Select an image to measure:DNA
    Select objects to measure:Nucleus

MeasureObjectIntensity:[module_num:13|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
    Hidden:1
    Select an image to measure:Mito
    Select objects to measure:Cytoplasm

MeasureObjectIntensityDistribution:[module_num:14|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
    Hidden:1
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select an image to measure:DNA
    Select objects to measure:Nucleus
    Object to use as center?:These objects
    Select objects to use as centers:Nucleus
    Scale the bins?:Yes
    Number of bins:3
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
MeasureObjectIntensityDistribution:[module_num:15|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
    Hidden:1
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select an image to measure:Mito
    Select objects to measure:Cytoplasm
    Object to use as center?:Edges of other objects
    Select objects to use as centers:Nucleus
    Scale the bins?:Yes
    Number of bins:4
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
ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|15MayLiveCell/New CP Pipeline Output/30
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Cytoplasm|Number_Object_Number,Cytoplasm|Intensity_MassDisplacement_Mito,Cytoplasm|Intensity_MinIntensity_Mito,Cytoplasm|Intensity_StdIntensity_Mito,Cytoplasm|Intensity_IntegratedIntensityEdge_Mito,Cytoplasm|Intensity_MinIntensityEdge_Mito,Cytoplasm|Intensity_MADIntensity_Mito,Cytoplasm|Intensity_IntegratedIntensity_Mito,Cytoplasm|Intensity_MeanIntensityEdge_Mito,Cytoplasm|Intensity_UpperQuartileIntensity_Mito,Cytoplasm|Intensity_MaxIntensity_Mito,Cytoplasm|Intensity_MedianIntensity_Mito,Cytoplasm|Intensity_MeanIntensity_Mito,Cytoplasm|Intensity_LowerQuartileIntensity_Mito,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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